PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = IGT_test_1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image_deck_1
      image = deck_1.jpg
      pos = (-0.64, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_deck_2
      image = deck_2.jpg
      pos = (-0.21, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_deck_3
      image = deck_3.jpg
      pos = (0.21, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_deck_4
      image = deck_4.jpg
      pos = (0.64, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ProgressComponent prog_wins
      anchor = center-left
      borderColor = white
      color = -1.0000, 1.0000, 0.0510
      fillColor = None
      lineWidth = 4
      pos = (-0.5, 0.4)
      progress [set every repeat] = wins_bar
      size = (1.25, 0.05)
      startVal [time (s)] = 0
      units = height
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    TextComponent text_wins
      letterHeight = 0.05
      pos = (-0.70, 0.4)
      startVal [time (s)] = 0.0
      text = Ganancias:
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    ProgressComponent prog_lose
      anchor = center-left
      borderColor = white
      color = 1.0000, -1.0000, -1.0000
      fillColor = None
      lineWidth = 4
      pos = (-0.5, 0.305)
      progress [set every repeat] = lose_bar
      size = (1.25, 0.05)
      startVal [condition] = condition_unce == "HIGU"
      units = height
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    TextComponent text_lose
      letterHeight = 0.05
      pos = (-0.70, 0.305)
      startVal [condition] = condition_unce == "HIGU"
      text = Pérdidas:
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    MouseComponent mouse
      clickable = image_deck_1, image_deck_2, image_deck_3, image_deck_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_prog_0
      letterHeight = 0.035
      pos = (-0.495, 0.46)
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_prog_10000
      letterHeight = 0.035
      pos = (0.75, 0.46)
      startVal [time (s)] = 0.0
      text = 10000
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    TextComponent text_prog_5000
      letterHeight = 0.035
      pos = (0.125, 0.46)
      startVal [time (s)] = 0.0
      text = 5000
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    TextComponent text_wins_deck_1
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.05
      pos = (-0.64, -0.35)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $int(wins_mean_deck1)
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    TextComponent text_lose_deck_1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.64, -0.45)
      startVal [condition] = condition_unce == "HIGU" and condition_tool == "WAIT"
      text [set every repeat] = $int(lose_mean_deck1)
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    TextComponent text_wins_deck_2
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.05
      pos = (-0.21, -0.35)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $int(wins_mean_deck2)
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    TextComponent text_lose_deck_2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.21, -0.45)
      startVal [condition] = condition_unce == "HIGU" and condition_tool == "WAIT"
      text [set every repeat] = $int(lose_mean_deck2)
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    TextComponent text_wins_deck_3
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.05
      pos = (0.21, -0.35)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $int(wins_mean_deck3)
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    TextComponent text_lose_deck_3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.21, -0.45)
      startVal [condition] = condition_unce == "HIGU" and condition_tool == "WAIT"
      text [set every repeat] = $int(lose_mean_deck3)
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    TextComponent text_wins_deck_4
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.05
      pos = (0.64, -0.35)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $int(wins_mean_deck4)
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    TextComponent text_lose_deck_4
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.64, -0.45)
      startVal [condition] = condition_unce == "HIGU" and condition_tool == "WAIT"
      text [set every repeat] = $int(lose_mean_deck4)
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    TextComponent text_instruction_NAIT
      letterHeight = 0.075
      pos = (0, 0.15)
      startVal [condition] = condition_tool == "NAIT"
      text = Elije un mazo
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    TextComponent text_AIT_instruction
      letterHeight = 0.075
      pos = (-.2, 0.15)
      startVal [condition] = condition_tool == "WAIT"
      text = Se te recomienda elegir: 
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    TextComponent text_AIT_deck1
      letterHeight = 0.075
      pos = (.3, 0.15)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $choose_deck1
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    TextComponent text_AIT_deck2
      letterHeight = 0.075
      pos = (.4, 0.15)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $choose_deck2
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    TextComponent text_AIT_deck3
      letterHeight = 0.075
      pos = (.5, 0.15)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $choose_deck3
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    TextComponent text_AIT_deck4
      letterHeight = 0.075
      pos = (.6, 0.15)
      startVal [condition] = condition_tool == "WAIT"
      text [set every repeat] = $choose_deck4
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  Routine feedback_test
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    TextComponent text_wins_fedback_
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $wins
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    TextComponent text_wins_fedback_inst
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Ganaste:
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    TextComponent text_lose_fedback_inst
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Perdiste:
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    TextComponent text_lose_fedback
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $lose
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  Routine comp_code_import_values
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  Routine feedback
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    PolygonComponent selection_1
      fillColor = 1.0000, 0.8667, -0.9843
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.64, -0.15)
      shape = rectangle
      size = (0.32, 0.32)
      startVal [condition] = clicked_image == 1
      stopVal [time (s)] = 2
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    PolygonComponent selection_2
      fillColor = 1.0000, 0.8667, -0.9843
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.21, -0.15)
      shape = rectangle
      size = (0.32, 0.32)
      startVal [condition] = clicked_image == 2
      stopVal [time (s)] = 2
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    PolygonComponent selection_3
      fillColor = 1.0000, 0.8667, -0.9843
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.21, -0.15)
      shape = rectangle
      size = (0.32, 0.32)
      startVal [condition] = clicked_image == 3
      stopVal [time (s)] = 2
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    PolygonComponent selection_4
      fillColor = 1.0000, 0.8667, -0.9843
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.64, -0.15)
      shape = rectangle
      size = (0.32, 0.32)
      startVal [condition] = clicked_image == 4
      stopVal [time (s)] = 2
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    ProgressComponent prog_wins_f
      anchor = center-left
      borderColor = white
      color = -1.0000, 1.0000, 0.0510
      fillColor = None
      lineWidth = 4
      pos = (-0.5, 0.4)
      progress [set every repeat] = wins_bar
      size = (1.25, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = height
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    ProgressComponent prog_lose_f
      anchor = center-left
      borderColor = white
      color = 1.0000, -1.0000, -1.0000
      fillColor = None
      lineWidth = 4
      pos = (-0.5, 0.305)
      progress [set every repeat] = lose_bar
      size = (1.25, 0.05)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      units = height
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    ImageComponent image_deck_1_f
      image = deck_1.jpg
      pos = (-0.64, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_deck_2_f
      image = deck_2.jpg
      pos = (-0.21, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_deck_3_f
      image = deck_3.jpg
      pos = (0.21, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_deck_4_f
      image = deck_4.jpg
      pos = (0.64, -0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_wins_f
      letterHeight = 0.05
      pos = (-0.70, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Ganancias:
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    TextComponent text_lose_f
      letterHeight = 0.05
      pos = (-0.70, 0.305)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      text = Pérdidas:
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    TextComponent text_prog_0_f
      letterHeight = 0.035
      pos = (-0.495, 0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 0
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    TextComponent text_prog_5000_f
      letterHeight = 0.035
      pos = (0.125, 0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 5000
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    TextComponent text_prog_10000_f
      letterHeight = 0.035
      pos = (0.75, 0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 10000
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    TextComponent text_feedback_w_high
      letterHeight = 0.075
      pos = (-0.35, 0.18)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      text = Ganaste:
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    TextComponent text_feedback_w_high_value
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.075
      pos = (-0.35, 0.09)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      text [set every repeat] = $wins
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    TextComponent text_feedback_lose
      letterHeight = 0.075
      pos = (0.35, 0.18)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      text = Perdiste:
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    TextComponent text_feedback_lose_value
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (0.35, 0.09)
      startVal [condition] = condition_unce == "HIGU"
      stopVal [time (s)] = 2
      text [set every repeat] = $lose
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    TextComponent text_feedback_w_low
      letterHeight = 0.075
      pos = (0, 0.18)
      startVal [condition] = condition_unce == "LOWU"
      stopVal [time (s)] = 2
      text = Ganaste:
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    TextComponent text_feedback_w_high_low
      color = -1.0000, 1.0000, 0.0510
      letterHeight = 0.075
      pos = (0, 0.09)
      startVal [condition] = condition_unce == "LOWU"
      stopVal [time (s)] = 2
      text [set every repeat] = $wins
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  Routine start_experiment
    RoutineSettingsComponent start_experiment
      saveStartStop = False
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    CodeComponent start_code
      Code Type = Auto->JS
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      Begin Routine:
        #importa paqueter+ias necesarias para el funcionamiento
        import pandas as pd
        import random, itertools

        con_count = 0
        points_total = 0

        #Hace una lista de los archivos de consición
        list_file = ["deck_data_1.xlsx", "deck_data_2.xlsx", "deck_data_3.xlsx", "deck_data_4.xlsx"]
        ##Aleatoriza la lista
        random.shuffle(list_file)

        #Hace listas con las conditiones
        ##Herramienta
        list_tool = ["WAIT", "NAIT"]
        ##Condición incertidumbre
        list_unce = ["LOWU", "HIGU"]

        ##Aleatoriza las listas
        random.shuffle(list_tool)
        random.shuffle(list_unce)

        ##Determina el orden de las condiciones
        condition_tool_1 = list_tool[0]
        condition_tool_2 = list_tool[1]
        condition_unce_1 = list_unce[0]
        condition_unce_2 = list_unce[1]

        #Crea el nombre de las conditiones
        condition_1 = f'{condition_tool_1}_{condition_unce_1}'
        condition_2 = f'{condition_tool_1}_{condition_unce_2}'
        condition_3 = f'{condition_tool_2}_{condition_unce_1}'
        condition_4 = f'{condition_tool_2}_{condition_unce_2}'

        #crea una variable con los nombres de las conditiones en orden
        condition_list = [condition_1, condition_2, condition_3, condition_4]
  Routine comp_code_start
    RoutineSettingsComponent comp_code_start
      saveStartStop = False
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    CodeComponent code_import_values
      Code Type = Auto->JS
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      Begin Routine:
        #determina el número de la condición
        condition = condition_list[con_count]
        con_count = con_count + 1

        #importa los datos de ganancias y perdidas de un excel
        data_file_name = list_file[con_count - 1]
        data_file = pd.read_excel(data_file_name)

        #Aleatoriza la posición de los decks
        shuffle_list = ["A", "B", "C", "D"]
        random.shuffle(shuffle_list)
        deck_1_letter = shuffle_list[0]
        deck_2_letter = shuffle_list[1]
        deck_3_letter = shuffle_list[2]
        deck_4_letter = shuffle_list[3]

        name_wins_1 = f'deck_{deck_1_letter}_wins'
        name_lose_1 = f'deck_{deck_1_letter}_lose'
        name_wins_2 = f'deck_{deck_2_letter}_wins'
        name_lose_2 = f'deck_{deck_2_letter}_lose'
        name_wins_3 = f'deck_{deck_3_letter}_wins'
        name_lose_3 = f'deck_{deck_3_letter}_lose'
        name_wins_4 = f'deck_{deck_4_letter}_wins'
        name_lose_4 = f'deck_{deck_4_letter}_lose'

        #convierte los datos en listas separadas
        deck_1_wins = data_file[name_wins_1].values.tolist()
        deck_1_lose = data_file[name_lose_1].values.tolist()
        deck_2_wins = data_file[name_wins_2].values.tolist()
        deck_2_lose = data_file[name_lose_2].values.tolist()
        deck_3_wins = data_file[name_wins_3].values.tolist()
        deck_3_lose = data_file[name_lose_3].values.tolist()
        deck_4_wins = data_file[name_wins_4].values.tolist()
        deck_4_lose = data_file[name_lose_4].values.tolist()

        #Aleatoriza las listas en bloques
        # Define el tamño del bloque
        blocksize = 10

        #Crea una lista con los elementos a aleatorizar

        # Crea bloques
        blocks = [deck_1_wins[x:x+blocksize] for x in range(0, len(deck_1_wins), blocksize)]
        # Aleatoriza los bloques
        random.shuffle(blocks)
        # Pega los bloques aleatorizados
        deck_1_wins = list(itertools.chain.from_iterable(blocks))

        blocks = [deck_1_lose[x:x+blocksize] for x in range(0, len(deck_1_lose), blocksize)]
        random.shuffle(blocks)
        deck_1_lose = list(itertools.chain.from_iterable(blocks))

        blocks = [deck_2_wins[x:x+blocksize] for x in range(0, len(deck_2_wins), blocksize)]
        random.shuffle(blocks)
        deck_2_wins = list(itertools.chain.from_iterable(blocks))
        blocks = [deck_2_lose[x:x+blocksize] for x in range(0, len(deck_2_lose), blocksize)]
        random.shuffle(blocks)
        deck_2_lose = list(itertools.chain.from_iterable(blocks))

        blocks = [deck_3_wins[x:x+blocksize] for x in range(0, len(deck_3_wins), blocksize)]
        random.shuffle(blocks)
        deck_3_wins = list(itertools.chain.from_iterable(blocks))
        blocks = [deck_3_lose[x:x+blocksize] for x in range(0, len(deck_3_lose), blocksize)]
        random.shuffle(blocks)
        deck_3_lose = list(itertools.chain.from_iterable(blocks))

        blocks = [deck_4_wins[x:x+blocksize] for x in range(0, len(deck_4_wins), blocksize)]
        random.shuffle(blocks)
        deck_4_wins = list(itertools.chain.from_iterable(blocks))
        blocks = [deck_4_lose[x:x+blocksize] for x in range(0, len(deck_4_lose), blocksize)]
        random.shuffle(blocks)
        deck_4_lose = list(itertools.chain.from_iterable(blocks))
    CodeComponent code_variables
      Code Type = Auto->JS
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      Begin Routine:
        #determina el valor de inicio de las variables
        score_deck1 = 0
        score_deck2 = 0
        score_deck3 = 0
        score_deck4 = 0
        score = 0

        wins = 0
        lose = 0
        wins_total = 0
        lose_total = 0
        points_total_condition = 0
        wins_bar = 0
        lose_bar = 0
        wins_deck1 = 0
        lose_deck1 = 0
        wins_deck2 = 0
        lose_deck2 = 0
        wins_deck3 = 0
        lose_deck3 = 0
        wins_deck4 = 0
        lose_deck4 = 0
        counter_deck1 = 0
        counter_deck2 = 0
        counter_deck3 = 0
        counter_deck4 = 0
        wins_mean_deck1 = 0
        lose_mean_deck1 = 0
        total_mean_deck1 = 0
        wins_mean_deck2 = 0
        lose_mean_deck2 = 0
        total_mean_deck2 = 0
        wins_mean_deck3 = 0
        lose_mean_deck3 = 0
        total_mean_deck3 = 0
        wins_mean_deck4 = 0
        lose_mean_deck4 = 0
        total_mean_deck4 = 0
        clicked_image = 0

        choose_deck1 = "A"
        choose_deck2 = "B"
        choose_deck3 = "C"
        choose_deck4 = "D"

        counter_AIT = 0
        counter_AIT_deck1 = 0
        counter_AIT_deck2 = 0
        counter_AIT_deck3 = 0
        counter_AIT_deck4 = 0
    CodeComponent code_condition_type
      Code Type = Auto->JS
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      Begin Routine:
        condition_tool = condition[0 : 4]
        condition_unce = condition[5 : 9]
    CodeComponent code_score
      Code Type = Auto->JS
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      End Routine:
        #Calcular Promedios de lista para el score
        ##Obtiene el promedio por lista
        total_deck1_wins = sum(deck_1_wins)
        total_deck1_lose = sum(deck_1_lose)
        total_deck2_wins = sum(deck_2_wins)
        total_deck2_lose = sum(deck_2_lose)
        total_deck3_wins = sum(deck_3_wins)
        total_deck3_lose = sum(deck_3_lose)
        total_deck4_wins = sum(deck_4_wins)
        total_deck4_lose = sum(deck_4_lose)

        #Calcula las puntuaciones máximas para cada mazo
        if condition_unce == "HIGU":
            total_points_deck1 = total_deck1_wins - total_deck1_lose
            total_points_deck2 = total_deck2_wins - total_deck2_lose
            total_points_deck3 = total_deck3_wins - total_deck3_lose
            total_points_deck4 = total_deck4_wins - total_deck4_lose
        elif condition_unce == "LOWU":
            total_points_deck1 = total_deck1_wins
            total_points_deck2 = total_deck2_wins
            total_points_deck3 = total_deck3_wins
            total_points_deck4 = total_deck4_wins

        #Crea una lista para obtener el máximo y minimo
        total_points = [total_points_deck1, total_points_deck2, total_points_deck3, total_points_deck4]

        total_points_max = max(total_points)
        total_points_min = min(total_points)

        #Calcula el score para cada mazo
        score_deck1 = (total_points_deck1 - total_points_min) / (total_points_max - total_points_min)
        score_deck2 = (total_points_deck2 - total_points_min) / (total_points_max - total_points_min)
        score_deck3 = (total_points_deck3 - total_points_min) / (total_points_max - total_points_min)
        score_deck4 = (total_points_deck4 - total_points_min) / (total_points_max - total_points_min)

        #lista scores
        score_list = [score_deck1, score_deck2, score_deck3, score_deck4]
        score_list.sort()
        score_ref1 = score_list[2]
        score_ref2 = score_list[3]
  Routine comp_code_AIT
    RoutineSettingsComponent comp_code_AIT
      saveStartStop = False
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    CodeComponent code_AIT
      Code Type = Auto->JS
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      Begin Routine:
        #Herramienta de soporte

        ##deck 1
        if counter_deck1 < 3:
            choose_deck1 = "A"
            counter_AIT_deck1 = 0
        elif counter_AIT < 4 and counter_deck1 > 2:
            choose_deck1 = ""
        elif counter_AIT > 3 and score_deck1 < score_ref1:
            choose_deck1 = ""
        elif counter_AIT < 6 and counter_deck1 > 9:
            choose_deck1 = ""
        elif counter_deck1 > 9 and score_deck1 < score_ref2:
            choose_deck1 = ""
        else: choose_deck1 = "A"

        ##deck 2
        if counter_deck2 < 3:
            choose_deck2 = "B"
            counter_AIT_deck2 = 0
        elif counter_AIT < 4 and counter_deck2 > 2:
            choose_deck2 = ""
        elif counter_AIT > 3 and score_deck2 < score_ref1:
            choose_deck2 = ""
        elif counter_AIT < 6 and counter_deck2 > 9:
            choose_deck2 = ""
        elif counter_deck2 > 9 and score_deck2 < score_ref2:
            choose_deck2 = ""
        else: choose_deck2 = "B"

        ##deck 3
        if counter_deck3 < 3:
            choose_deck3 = "C"
            counter_AIT_deck3 = 0
        elif counter_AIT < 4 and counter_deck3 > 2:
            choose_deck3 = ""
        elif counter_AIT > 3 and score_deck3 < score_ref1:
            choose_deck3 = ""
        elif counter_AIT < 6 and counter_deck3 > 9:
            choose_deck3 = ""
        elif counter_deck3 > 9 and score_deck3 < score_ref2:
            choose_deck3 = ""
        else: choose_deck3 = "C"

        ##deck 4
        if counter_deck4 < 3:
            choose_deck4 = "D"
            counter_AIT_deck4 = 0
        elif counter_AIT < 4 and counter_deck4 > 2:
            choose_deck4 = ""
        elif counter_AIT > 3 and score_deck4 < score_ref1:
            choose_deck4 = ""
        elif counter_AIT < 6 and counter_deck4 > 9:
            choose_deck4 = ""
        elif counter_deck4 > 9 and score_deck4 < score_ref2:
            choose_deck4 = ""
        else: choose_deck4 = "D"
  Routine instruc_continuar
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    TextComponent text_instr_continuar
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [condition] = con_count < 4
      wrapWidth = 1.5
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      text:
        ¡Felicidades! Has completado el bloque actual de la tarea experimental. A continuación, encontrarás un resumen de tus ganancias en este bloque.

        Cuando estés listo, indica que quieres continuar con el siguiente bloque. Si tienes alguna pregunta o necesitas más información, no dudes en contactar al investigador o asistente de investigación.

        ¡Gracias por tu participación y esfuerzo en esta tarea experimental!
    TextComponent text_instr_end
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [condition] = con_count == 4
      wrapWidth = 1.5
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      text:
        ¡Felicidades! Has completado exitosamente todas las fases de nuestro experimento. Agradecemos sinceramente tu participación.

        Abajo está el resumen de tus ganancias y pérdidas a lo largo de la tarea experimental. Tómate un momento para revisar y observar cómo tus elecciones impactaron tus resultados.

        Queremos expresar nuestro agradecimiento por tu dedicación y esfuerzo en la realización de este experimento. Tu participación es esencial para el éxito de nuestra investigación.
    TextComponent text_points_condition
      letterHeight = 0.04
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Puntos en este bloque:
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    TextComponent text_value_points_condition
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.075
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total_condition
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    TextComponent text_points_total
      letterHeight = 0.04
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Total acumulado:
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    TextComponent text_value_points_total
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.075
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total
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    KeyboardComponent trigger_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = con_count < 4
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    KeyboardComponent trigger_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = con_count == 4
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  Routine comp_write_data
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    CodeComponent code_write_data
      Code Type = Auto->JS
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      Begin Routine:
        #Crea una columna con la variable
        #Condiciones
        trials.addData("con_count", con_count)
        trials.addData("condition_tool", condition_tool)
        trials.addData("condition_unce", condition_unce)

        #Archivo de propuestas
        trials.addData("data_file_name", data_file_name)

        #El orden de los mazos
        trials.addData("name_wins_1", name_wins_1)
        trials.addData("name_lose_1", name_lose_1)
        trials.addData("name_wins_2", name_wins_2)
        trials.addData("name_lose_2", name_lose_2)
        trials.addData("name_wins_3", name_wins_3)
        trials.addData("name_lose_3", name_lose_3)
        trials.addData("name_wins_4", name_wins_4)
        trials.addData("name_lose_4", name_lose_4)

        #El score de cada mazo
        trials.addData("score_deck1", score_deck1)
        trials.addData("score_deck2", score_deck2)
        trials.addData("score_deck3", score_deck3)
        trials.addData("score_deck4", score_deck4)
        trials.addData("score_ref1", score_ref1)
        trials.addData("score_ref2", score_ref2)

        ##Imagen seleccionada
        trials.addData("clicked_image", clicked_image)
        ##ganancia por ensayo
        trials.addData("wins", wins)
        ##pérdidas por ensayo
        trials.addData("lose", lose)
        ##ganancias totales
        trials.addData("wins_total", wins_total)
        ##pérdidas totales
        trials.addData("lose_total", lose_total)
        ##Puntos acumulados esta condición
        trials.addData("points_total_condition", points_total_condition)
        ##puntos acumulados en todas las condiciones
        trials.addData("points_total", points_total)
        ##score de la elección
        trials.addData("score", score)

        ##Gancias por decks
        trials.addData("wins_deck1", wins_deck1)
        trials.addData("lose_deck1", lose_deck1)
        trials.addData("wins_deck2", wins_deck2)
        trials.addData("lose_deck2", lose_deck2)
        trials.addData("wins_deck3", wins_deck3)
        trials.addData("lose_deck3", lose_deck3)
        trials.addData("wins_deck4", wins_deck4)
        trials.addData("lose_deck4", lose_deck4)

        #Número de veces elegido el deck
        trials.addData("counter_deck1", counter_deck1)
        trials.addData("counter_deck2", counter_deck2)
        trials.addData("counter_deck3", counter_deck3)
        trials.addData("counter_deck4", counter_deck4)

        ##Promedio de ganancia por deck
        trials.addData("wins_mean_deck1", wins_mean_deck1)
        trials.addData("lose_mean_deck1", lose_mean_deck1)
        trials.addData("total_mean_deck1", total_mean_deck1)
        trials.addData("wins_mean_deck2", wins_mean_deck2)
        trials.addData("lose_mean_deck2", lose_mean_deck2)
        trials.addData("total_mean_deck2", total_mean_deck2)
        trials.addData("wins_mean_deck3", wins_mean_deck3)
        trials.addData("lose_mean_deck3", lose_mean_deck3)
        trials.addData("total_mean_deck3", total_mean_deck3)
        trials.addData("wins_mean_deck4", wins_mean_deck4)
        trials.addData("lose_mean_deck4", lose_mean_deck4)
        trials.addData("total_mean_deck4", total_mean_deck4)

        ## contador para la herramienta
        trials.addData("counter_AIT", counter_AIT)
        ## Sugerencias de la herramienta
        trials.addData("choose_deck1", choose_deck1)
        trials.addData("choose_deck2", choose_deck2)
        trials.addData("choose_deck3", choose_deck3)
        trials.addData("choose_deck4", choose_deck4)
  Routine instruc_start
    RoutineSettingsComponent instruc_start
      saveStartStop = False
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    TextComponent text_instr_start
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Bienvenido a nuestra tarea experimental. El objetivo de este experimento es acumular la mayor cantidad de puntos posibles. Agradecemos tu participación en nuestro estudio.

        Descripción de la tarea:
        •A continuación, verás cuatro mazos virtuales de cartas en tu pantalla. Debes usar el ratón para seleccionar el mazo que te parezca más conveniente en cada ensayo.
        •La tarea consiste en ejecutar bloques de ensayos para ganar puntos.
        •En algunos bloques, cada mazo solo dará ganancias; En otros, los mazos darán ganancias, pero a veces también pérdidas.
    ImageComponent button_continue_instr_start
      image = botones/boton_continuar.png
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.4, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_instr_start
      clickable = button_continue_instr_start
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruc_start_2
    RoutineSettingsComponent instruc_start_2
      saveStartStop = False
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    TextComponent text_instr_start_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Tu objetivo:

        Es descubrir cuál de los cuatro mazos es el que da la mayor cantidad de puntos en general y seleccionarlo la mayor cantidad de veces posibles.



        Herramienta de inteligencia artificial:

        En algunos bloques de la tarea, contarás con la ayuda de una herramienta de inteligencia artificial que te proporcionará información adicional para ayudarte a tomar decisiones.
    ImageComponent button_continue_instr_start_2
      image = botones/boton_continuar.png
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.4, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_instr_start_2
      clickable = button_continue_instr_start_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruc_practice
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    TextComponent text_instr_inicio_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Instrucciones Generales:

        1. Selecciona un mazo haciendo clic en él con el ratón en cada ensayo. No hay límite de tiempo, así que tómate el tiempo que necesites para tomar tu decisión.
        2. Observa las ganancias y pérdidas que obtienes después de seleccionar un mazo en cada ensayo y ten en cuenta la información acumulada para desarrollar tu estrategia.
        3. A lo largo de los bloques, podrás cambiar tu elección de mazo tantas veces como desees.
        4. Ten en cuenta que algunos mazos pueden ser más beneficiosos a lo largo del tiempo, mientras que otros pueden generar más pérdidas.
        5. Utiliza la herramienta de inteligencia artificial cuando esté disponible para recibir información adicional que podría ayudarte en tu elección.



        A continuación, harás junto al investigador unos ensayos de prueba.
    KeyboardComponent trigger_practice_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine comp_code_postrial
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    CodeComponent code_click
      Code Type = Auto->JS
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      End Routine:
        #Asigna las ganancias y pérdidas por deck
        if mouse.isPressedIn(image_deck_1):
            wins = deck_1_wins[int(counter_deck1)]
            lose = deck_1_lose[int(counter_deck1)]
            wins_deck1 = wins_deck1 + wins
            lose_deck1 = lose_deck1 + lose
            counter_deck1 = counter_deck1 + 1
            score = score_deck1
            clicked_image = 1
        elif mouse.isPressedIn(image_deck_2):
            wins = deck_2_wins[int(counter_deck2)]
            lose = deck_2_lose[int(counter_deck2)]
            wins_deck2 = wins_deck2 + wins
            lose_deck2 = lose_deck2 + lose
            counter_deck2 = counter_deck2 + 1
            score = score_deck2
            clicked_image = 2
        elif mouse.isPressedIn(image_deck_3):
            wins = deck_3_wins[int(counter_deck3)]
            lose = deck_3_lose[int(counter_deck3)]
            wins_deck3 = wins_deck3 + wins
            lose_deck3 = lose_deck3 + lose
            counter_deck3 = counter_deck3 + 1
            score = score_deck3
            clicked_image = 3
        elif mouse.isPressedIn(image_deck_4):
            wins = deck_4_wins[int(counter_deck4)]
            lose = deck_4_lose[int(counter_deck4)]
            wins_deck4 = wins_deck4 + wins
            lose_deck4 = lose_deck4 + lose
            counter_deck4 = counter_deck4 + 1
            score = score_deck4
            clicked_image = 4


        #determina las ganancias y perdidas totales
        if condition_unce == "HIGU":
            wins_total = wins_total + wins
            lose_total = lose_total + lose
            points_total_condition = points_total_condition + wins - lose
            points_total = points_total + wins - lose
        elif condition_unce == "LOWU":
            wins_total = wins_total + wins
            lose_total = 0
            points_total_condition = points_total_condition + wins
            points_total = points_total + wins

        #determina el promedio de ganancia y perdida deck
        if counter_deck1 == 0:
            wins_mean_deck1 = 0
            lose_mean_deck1 = 0
        elif counter_deck1 > 0:
            wins_mean_deck1 = wins_deck1 / counter_deck1
            lose_mean_deck1 = lose_deck1 / counter_deck1

        if counter_deck2 == 0:
            wins_mean_deck2 = 0
            lose_mean_deck2 = 0
        elif counter_deck2 > 0:
            wins_mean_deck2 = wins_deck2 / counter_deck2
            lose_mean_deck2 = lose_deck2 / counter_deck2

        if counter_deck3 == 0:
            wins_mean_deck3 = 0
            lose_mean_deck3 = 0
        elif counter_deck3 > 0:
            wins_mean_deck3 = wins_deck3 / counter_deck3
            lose_mean_deck3 = lose_deck3 / counter_deck3

        if counter_deck4 == 0:
            wins_mean_deck4 = 0
            lose_mean_deck4 = 0
        elif counter_deck4 > 0:
            wins_mean_deck4 = wins_deck4 / counter_deck4
            lose_mean_deck4 = lose_deck4 / counter_deck4


        #Calcula la suma entre las medias de perdida y ganancia
        if condition_unce == "HIGU":
            total_mean_deck1 = wins_mean_deck1 - lose_mean_deck1
            total_mean_deck2 = wins_mean_deck2 - lose_mean_deck2
            total_mean_deck3 = wins_mean_deck3 - lose_mean_deck3
            total_mean_deck4 = wins_mean_deck4 - lose_mean_deck4
        else: total_mean_deck1 = wins_mean_deck1; total_mean_deck2 = wins_mean_deck2; total_mean_deck3 = wins_mean_deck3; total_mean_deck4 = wins_mean_deck4



        #determina el progreso de las barras de ganancia y perdida
        wins_bar = (wins_total / 10000)
        lose_bar = (lose_total / 10000)
    CodeComponent code_AIT_count
      Code Type = Auto->JS
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      End Routine:
        ##guarda las medias clave para comparar en la AIT
        if counter_deck1 == 3:
            compare1_deck1 = total_mean_deck1
        if counter_deck1 == 10:
            compare2_deck1 = total_mean_deck1

        if counter_deck2 == 3:
            compare1_deck2 = total_mean_deck2
        if counter_deck2 == 10:
            compare2_deck2 = total_mean_deck2

        if counter_deck3 == 3:
            compare1_deck3 = total_mean_deck3
        if counter_deck3 == 10:
            compare2_deck3 = total_mean_deck3

        if counter_deck4 == 3:
            compare1_deck4 = total_mean_deck4
        if counter_deck4 == 10:
            compare2_deck4 = total_mean_deck4

        # Cambia el contador para la herramienta de soporte
        if counter_deck1 == 3 and counter_AIT_deck1 == 0:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck1 = 1
        if counter_deck1 == 10 and counter_AIT_deck1 == 1:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck1 = 2

        if counter_deck2 == 3 and counter_AIT_deck2 == 0:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck2 = 1
        if counter_deck2 == 10 and counter_AIT_deck2 == 1:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck2 = 2

        if counter_deck3 == 3 and counter_AIT_deck3 == 0:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck3 = 1
        if counter_deck3 == 10 and counter_AIT_deck3 == 1:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck3 = 2

        if counter_deck4 == 3 and counter_AIT_deck4 == 0:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck4 = 1
        if counter_deck4 == 10 and counter_AIT_deck4 == 1:
            counter_AIT = counter_AIT + 1
            counter_AIT_deck4 = 2
  Routine comp_code_practice
    RoutineSettingsComponent comp_code_practice
      saveStartStop = False
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    CodeComponent code_import_values_practice
      Code Type = Auto->JS
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      Begin Routine:
        #determina el número de la condición
        con_count = 0

        #importa los datos de ganancias y perdidas de un excel
        data_file = pd.read_excel("deck_data_practice.xlsx")

        #Aleatoriza la posición de los decks
        shuffle_list = ["A", "B", "C", "D"]
        deck_1_letter = shuffle_list[0]
        deck_2_letter = shuffle_list[1]
        deck_3_letter = shuffle_list[2]
        deck_4_letter = shuffle_list[3]

        name_wins_1 = f'deck_{deck_1_letter}_wins'
        name_lose_1 = f'deck_{deck_1_letter}_lose'
        name_wins_2 = f'deck_{deck_2_letter}_wins'
        name_lose_2 = f'deck_{deck_2_letter}_lose'
        name_wins_3 = f'deck_{deck_3_letter}_wins'
        name_lose_3 = f'deck_{deck_3_letter}_lose'
        name_wins_4 = f'deck_{deck_4_letter}_wins'
        name_lose_4 = f'deck_{deck_4_letter}_lose'

        #convierte los datos en listas separadas
        deck_1_wins = data_file[name_wins_1].values.tolist()
        deck_1_lose = data_file[name_lose_1].values.tolist()
        deck_2_wins = data_file[name_wins_2].values.tolist()
        deck_2_lose = data_file[name_lose_2].values.tolist()
        deck_3_wins = data_file[name_wins_3].values.tolist()
        deck_3_lose = data_file[name_lose_3].values.tolist()
        deck_4_wins = data_file[name_wins_4].values.tolist()
        deck_4_lose = data_file[name_lose_4].values.tolist()
    CodeComponent code_condition_type_practice
      Code Type = Auto->JS
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      Begin Routine:
        if practice_condition.thisN == 0:
            condition_tool = "NAIT"
            condition_unce = "LOWU"
        elif practice_condition.thisN == 1:
            condition_tool = "NAIT"
            condition_unce = "HIGU"
        elif practice_condition.thisN == 2:
            condition_tool = "WAIT"
            condition_unce = "LOWU"
        elif practice_condition.thisN == 3:
            condition_tool = "WAIT"
            condition_unce = "HIGU"
    CodeComponent code_variables_practice
      Code Type = Auto->JS
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      Begin Routine:
        #determina el valor de inicio de las variables
        score_deck1 = 0
        score_deck2 = 0
        score_deck3 = 0
        score_deck4 = 0
        score = 0

        wins = 0
        lose = 0
        wins_total = 0
        lose_total = 0
        points_total_condition = 0
        wins_bar = 0
        lose_bar = 0
        wins_deck1 = 0
        lose_deck1 = 0
        wins_deck2 = 0
        lose_deck2 = 0
        wins_deck3 = 0
        lose_deck3 = 0
        wins_deck4 = 0
        lose_deck4 = 0
        counter_deck1 = 0
        counter_deck2 = 0
        counter_deck3 = 0
        counter_deck4 = 0
        wins_mean_deck1 = 0
        lose_mean_deck1 = 0
        total_mean_deck1 = 0
        wins_mean_deck2 = 0
        lose_mean_deck2 = 0
        total_mean_deck2 = 0
        wins_mean_deck3 = 0
        lose_mean_deck3 = 0
        total_mean_deck3 = 0
        wins_mean_deck4 = 0
        lose_mean_deck4 = 0
        total_mean_deck4 = 0
        clicked_image = 0

        choose_deck1 = "A"
        choose_deck2 = "B"
        choose_deck3 = "C"
        choose_deck4 = "D"

        counter_AIT = 0
        counter_AIT_deck1 = 0
        counter_AIT_deck2 = 0
        counter_AIT_deck3 = 0
        counter_AIT_deck4 = 0
    CodeComponent code_score_practice
      Code Type = Auto->JS
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      End Routine:
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  Routine prep_trigger
    RoutineSettingsComponent prep_trigger
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Preparando el trigger:

        1. Verifica que el participante no esté conectado.
        2. Inicia la grabación.
        3. Conecta el cable serial.
        4. Cuando la señal este estable presiona espacio.
    KeyboardComponent resp_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruc_inicio_2
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    TextComponent text_instr_inicio
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Ahora vamos a empezar con los bloques del experimento.

        Recuerda:
        El objetivo es aprender y adaptarse a medida que avanzas en la tarea para encontrar la mejor alternativa y acumular puntos.

        ¡Disfruta de la tarea y acumula la mayor cantidad de puntos posible! Si tienes alguna pregunta, no dudes en preguntar al investigador. Gracias por tu participación.
    KeyboardComponent trigger_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger
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    TextComponent text_trigger_start
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¡Bienvenido!
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine start_experiment
  Routine trigger
  Routine instruc_start
  Routine instruc_start_2
  Routine instruc_practice
  LoopInitiator practice_condition loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    conditions:
      [{'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 203, 'deck_C_wins': 100, 'deck_C_lose': 22, 'deck_D_wins': 100, 'deck_D_lose': 65},
      {'deck_A_wins': 50, 'deck_A_lose': 145, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 0},
      {'deck_A_wins': 50, 'deck_A_lose': 207, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 50},
      {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 38, 'deck_D_wins': 100, 'deck_D_lose': 0},
      {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 49, 'deck_D_wins': 100, 'deck_D_lose': 0},
      {'deck_A_wins': 50, 'deck_A_lose': 136, 'deck_B_wins': 50, 'deck_B_lose': 142, 'deck_C_wins': 100, 'deck_C_lose': 41, 'deck_D_wins': 100, 'deck_D_lose': 0},
      {'deck_A_wins': 50, 'deck_A_lose': 312, 'deck_B_wins': 50, 'deck_B_lose': 145, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 66},
      {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 102, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 54},
      {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 108, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 0}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
    Routine comp_code_practice
    LoopInitiator practice_trials loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = deck_data_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 203, 'deck_C_wins': 100, 'deck_C_lose': 22, 'deck_D_wins': 100, 'deck_D_lose': 65},
        {'deck_A_wins': 50, 'deck_A_lose': 145, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 0},
        {'deck_A_wins': 50, 'deck_A_lose': 207, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 50},
        {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 38, 'deck_D_wins': 100, 'deck_D_lose': 0},
        {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 0, 'deck_C_wins': 100, 'deck_C_lose': 49, 'deck_D_wins': 100, 'deck_D_lose': 0},
        {'deck_A_wins': 50, 'deck_A_lose': 136, 'deck_B_wins': 50, 'deck_B_lose': 142, 'deck_C_wins': 100, 'deck_C_lose': 41, 'deck_D_wins': 100, 'deck_D_lose': 0},
        {'deck_A_wins': 50, 'deck_A_lose': 312, 'deck_B_wins': 50, 'deck_B_lose': 145, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 66},
        {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 102, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 54},
        {'deck_A_wins': 50, 'deck_A_lose': 0, 'deck_B_wins': 50, 'deck_B_lose': 108, 'deck_C_wins': 100, 'deck_C_lose': 0, 'deck_D_wins': 100, 'deck_D_lose': 0}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
      Routine comp_code_AIT
      Routine trial
      Routine comp_code_postrial
      Routine feedback
    LoopTerminator practice_trials
  LoopTerminator practice_condition
  Routine instruc_inicio_2
  LoopInitiator conditions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine comp_code_start
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 100
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      conditions:
        [{'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 0, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 50, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 100, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 0, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 500, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 200, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 0, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 800, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 150, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 0, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 0, 'deck_4_wins': 50, 'deck_4_lose': 0},
        {'deck_1_wins': 100, 'deck_1_lose': 0, 'deck_2_wins': 100, 'deck_2_lose': 0, 'deck_3_wins': 50, 'deck_3_lose': 100, 'deck_4_wins': 50, 'deck_4_lose': 0}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
      Routine comp_code_AIT
      Routine trial
      Routine comp_code_postrial
      Routine feedback
      Routine comp_write_data
    LoopTerminator trials
    Routine instruc_continuar
  LoopTerminator conditions
